PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = rtPupilPhase_builder
  keyboardBackend = ioHub
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Routines
  Routine task_instructions
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    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        #text_norm_2.alignText= 'left'
    CodeComponent initialize_variables
      Code Type = Auto->JS
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      Begin Routine:
        sd = StimulusDecider(block_length, baseline_duration_ms,
                            max_search_window_duration_ms, pupil_sample_duration_ms,
                            num_random_events, IEI_duration_sec, peak_pupil_quantile,
                            trough_pupil_quantile, dilation_quantile, constriction_quantile,
                            online=True, win=win)
    TextComponent text_norm_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Please fixate on the cross at all times.

        Press SPACE to begin the task.
  Routine start_block
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    KeyboardComponent start_block_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent block_start_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Starting block #" + str(block_idx)
      units = norm
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  Routine EyeLinkStart
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    CodeComponent elStartRecord
      Code Type = Py
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      Begin Routine:
        # get a reference to the currently active EyeLink connection
        el_tracker = pylink.getEYELINK()

        # put the tracker in the offline mode first
        el_tracker.setOfflineMode()

        # clear the host screen before we draw the backdrop
        el_tracker.sendCommand('clear_screen 0')

        # Start recording
        # arguments: sample_to_file, events_to_file, sample_over_link,
        # event_over_link (1-yes, 0-no)
        try:
            el_tracker.startRecording(1, 1, 1, 1)
        except RuntimeError as error:
            print("ERROR:", error)
            abort_trial()

        # Allocate some time for the tracker to cache some samples
        pylink.pumpDelay(100)

        # determine which eye(s) is/are available
        # 0-left, 1-right, 2-binocular
        eye_used = el_tracker.eyeAvailable()
        if eye_used == 1:
            el_tracker.sendMessage("EYE_USED 1 RIGHT")
        elif eye_used == 0 or eye_used == 2:
            el_tracker.sendMessage("EYE_USED 0 LEFT")
            eye_used = 0
        else:
            print("ERROR: Could not get eye information!")
  Routine end_block
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    KeyboardComponent end_block_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Finished block #" + str(block_idx)
      units = norm
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  Routine EyeLinkSetup
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    CodeComponent elConnect
      Code Type = Py
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      Before Experiment:
        import pylink
        import time
        import platform
        from PIL import Image  # for preparing the Host backdrop image
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from string import ascii_letters, digits
        from psychopy import gui


        # Switch to the script folder
        script_path = os.path.dirname(sys.argv[0])
        if len(script_path) != 0:
            os.chdir(script_path)

        # Set this variable to True if you use the built-in retina screen as your
        # primary display device on macOS. If have an external monitor, set this
        # variable True if you choose to "Optimize for Built-in Retina Display"
        # in the Displays preference settings.
        use_retina = False

        # Set this variable to True to run the script in "Dummy Mode"
        dummy_mode = True

        # Set up EDF data file name and local data folder
        #
        # The EDF data filename should not exceed 8 alphanumeric characters
        # use ONLY number 0-9, letters, & _ (underscore) in the filename
        edf_fname = 'TEST'

        # Prompt user to specify an EDF data filename
        # before we open a fullscreen window
        dlg_title = 'Enter EDF File Name'
        dlg_prompt = 'Please enter a file name with 8 or fewer characters\n' + \
                     '[letters, numbers, and underscore].'
        # loop until we get a valid filename
        while True:
            dlg = gui.Dlg(dlg_title)
            dlg.addText(dlg_prompt)
            dlg.addField('File Name:', edf_fname)
            # show dialog and wait for OK or Cancel
            ok_data = dlg.show()
            if dlg.OK:  # if ok_data is not None
                print('EDF data filename: {}'.format(ok_data[0]))
            else:
                print('user cancelled')
                core.quit()
                sys.exit()

            # get the string entered by the experimenter
            tmp_str = dlg.data[0]
            # strip trailing characters, ignore the ".edf" extension
            edf_fname = tmp_str.rstrip().split('.')[0]

            # check if the filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + '_'
            if not all([c in allowed_char for c in edf_fname]):
                print('ERROR: Invalid EDF filename')
            elif len(edf_fname) > 8:
                print('ERROR: EDF filename should not exceed 8 characters')
            else:
                break

        # Set up a folder to store the EDF data files and the associated resources
        # e.g., files defining the interest areas used in each trial
        results_folder = 'results'
        if not os.path.exists(results_folder):
            os.makedirs(results_folder)

        # We download EDF data file from the EyeLink Host PC to the local hard
        # drive at the end of each testing session, here we rename the EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = edf_fname + time_str

        # create a folder for the current testing session in the "results" folder
        session_folder = os.path.join(results_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)

        # For macOS users check if they have a retina screen
        if 'Darwin' in platform.system():
                dlg = gui.Dlg("Retina Screen?")
                dlg.addText("Will the task run on a Retina or a non-Retina screen?")
                dlg.addField("Screen Type:", choices=["Not Retina","Retina"])
                # show dialog and wait for OK or Cancel
                ok_data = dlg.show()
                if dlg.OK:
                    if dlg.data[0] == "Retina":
                        use_retina = True
                    else:
                        use_retina = False
                else:
                    print('user cancelled')
                    core.quit()
                    sys.exit()

        # Step 1: Connect to the EyeLink Host PC
        #
        # The Host IP address, by default, is "100.1.1.1".
        # the "el_tracker" objected created here can be accessed through the Pylink
        # Set the Host PC address to "None" (without quotes) to run the script
        # in "Dummy Mode"
        if dummy_mode:
            el_tracker = pylink.EyeLink(None)
        else:
            try:
                el_tracker = pylink.EyeLink("100.1.1.1")
            except RuntimeError as error:
                dlg = gui.Dlg("Dummy Mode?")
                dlg.addText("Couldn't connect to tracker at 100.1.1.1 -- continue in Dummy Mode?")
                # show dialog and wait for OK or Cancel
                ok_data = dlg.show()
                if dlg.OK:  # if ok_data is not None
                    dummy_mode = True
                    el_tracker = pylink.EyeLink(None)
                else:
                    print('user cancelled')
                    core.quit()
                    sys.exit()

        # Define some helper functions for screen drawing
        # and exiting trials/sessions early
        def clear_screen(win,genv):
            """ clear up the PsychoPy window"""
            win.fillColor = genv.getBackgroundColor()
            win.flip()

        def show_msg(win, genv, text, wait_for_keypress=True):
            """ Show task instructions on screen"""
            scn_width, scn_height = win.size
            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            clear_screen(win,genv)
            msg.draw()
            win.flip()

            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                kb = keyboard.Keyboard()
                #keys = kb.getKeys(['Enter'], waitRelease=False)
                waitKeys = kb.waitKeys(keyList=None, waitRelease=True, clear=True)
                clear_screen(win,genv)

        def terminate_task(genv,edf_file,session_folder,session_identifier):
            """ Terminate the task gracefully and retrieve the EDF data file
            """
            el_tracker = pylink.getEYELINK()

            if el_tracker.isConnected():
                # Terminate the current trial first if the task terminated prematurely
                error = el_tracker.isRecording()
                if error == pylink.TRIAL_OK:
                    abort_trial()

                # Put tracker in Offline mode
                el_tracker.setOfflineMode()

                # Clear the Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)

                # Close the edf data file on the Host
                el_tracker.closeDataFile()

                # Show a file transfer message on the screen
               # msg = 'EDF data is transferring from EyeLink Host PC...'
                #show_msg(win, genv, msg, wait_for_keypress=False)

                # Download the EDF data file from the Host PC to a local data folder
                # parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
               # try:
                #    el_tracker.receiveDataFile(edf_file, local_edf)
                #except RuntimeError as error:
                 #   print('ERROR:', error)

                # Close the link to the tracker.
                el_tracker.close()

            # close the PsychoPy window
            win.close()

            # quit PsychoPy
            core.quit()
            sys.exit()

        def abort_trial():
            """Ends recording """
            el_tracker = pylink.getEYELINK()

            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()

            # Send a message to clear the Data Viewer screen
            bgcolor_RGB = (128, 128, 128)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # send a message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)

            return pylink.TRIAL_ERROR
      Begin Experiment:
        el_tracker = pylink.getEYELINK()
        # Step 2: Open an EDF data file on the Host PC
        global edf_fname
        edf_file = edf_fname + ".EDF"
        try:
            print("opened edf")
            el_tracker.openDataFile(edf_file)
        except RuntimeError as err:
            print("couldn't open EDF")
            print('ERROR:', err)
            # close the link if we have one open
            if el_tracker.isConnected():
                el_tracker.close()
            core.quit()
            sys.exit()

        # Add a header text to the EDF file to identify the current experiment name
        # This is OPTIONAL. If your text starts with "RECORDED BY " it will be
        # available in DataViewer's Inspector window by clicking
        # the EDF session node in the top panel and looking for the "Recorded By:"
        # field in the bottom panel of the Inspector.
        preamble_text = 'RECORDED BY %s' % os.path.basename(__file__)
        el_tracker.sendCommand("add_file_preamble_text '%s'" % preamble_text)

        # Step 3: Configure the tracker
        #
        # Put the tracker in offline mode before we change tracking parameters
        el_tracker.setOfflineMode()

        # Get the software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
        # 5-EyeLink 1000 Plus, 6-Portable DUO
        eyelink_ver = 0  # set version to 0, in case running in Dummy mode
        if not dummy_mode:
            vstr = el_tracker.getTrackerVersionString()
            eyelink_ver = int(vstr.split()[-1].split('.')[0])
            # print out some version info in the shell
            print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

        # File and Link data control
        # what eye events to save in the EDF file, include everything by default
        file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
        # what eye events to make available over the link, include everything by default
        link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
        # what sample data to save in the EDF data file and to make available
        # over the link, include the 'HTARGET' flag to save head target sticker
        # data for supported eye trackers
        if eyelink_ver > 3:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,HTARGET,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
        else:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,PUPIL,AREA,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
        el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
        el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
        el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
        el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

        # Optional tracking parameters
        # Sample rate, 250, 500, 1000, or 2000, check your tracker specification
        # if eyelink_ver > 2:
        #     el_tracker.sendCommand("sample_rate 1000")
        # Choose a calibration type, H3, HV3, HV5, HV13 (HV = horizontal/vertical),
        el_tracker.sendCommand("calibration_type = HV9")
        # Set a gamepad button to accept calibration/drift check target
        # You need a supported gamepad/button box that is connected to the Host PC
        el_tracker.sendCommand("button_function 5 'accept_target_fixation'")

        # get the native screen resolution used by PsychoPy
        scn_width, scn_height = win.size
        # resolution fix for Mac retina displays
        if 'Darwin' in platform.system():
            if use_retina:
                scn_width = int(scn_width/2.0)
                scn_height = int(scn_height/2.0)

        # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
        # see the EyeLink Installation Guide, "Customizing Screen Settings"
        el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendCommand(el_coords)

        # Write a DISPLAY_COORDS message to the EDF file
        # Data Viewer needs this piece of info for proper visualization, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendMessage(dv_coords)

        # Configure a graphics environment (genv) for tracker calibration
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        print(genv)  # print out the version number of the CoreGraphics library
      End Experiment:
        # This End Experiment tab of the elConnect component calls the
        # terminate_task helper function to get the EDF file and close the connection
        # to the Host PC

        # Disconnect, download the EDF file, then terminate the task
        terminate_task(genv,edf_file,session_folder,session_identifier)
      End Routine:
        # This End Routine tab of the elConnect component configures some
        # graphics options for calibration, and then performs a camera setup
        # so that you can set up the eye tracker and calibrate/validate the participant

        # Set background and foreground colors for the calibration target
        # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
        foreground_color = (-1, -1, -1)
        background_color = tuple(win.color)
        genv.setCalibrationColors(foreground_color, background_color)

        # Set up the calibration target
        #
        # The target could be a "circle" (default), a "picture", a "movie" clip,
        # or a rotating "spiral". To configure the type of calibration target, set
        # genv.setTargetType to "circle", "picture", "movie", or "spiral", e.g.,
        # genv.setTargetType('picture')
        #
        # Use genv.setMovieTarget() to set a "movie" target
        # genv.setMovieTarget(os.path.join('videos', 'calibVid.mov'))

        # Use a picture as the calibration target
        genv.setTargetType('circle')
        genv.setTargetSize(24)

        # Configure the size of the calibration target (in pixels)
        # this option applies only to "circle" and "spiral" targets
        # genv.setTargetSize(24)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
        genv.setCalibrationSounds('off', 'off', 'off')

        # resolution fix for macOS retina display issues
        if use_retina:
            genv.fixMacRetinaDisplay()

        #clear the screen before we begin Camera Setup mode
        clear_screen(win,genv)

        # Request Pylink to use the PsychoPy window we opened above for calibration
        pylink.openGraphicsEx(genv)

        # Peform a Camera Setup (eye tracker calibration)
        # skip this step if running the script in Dummy Mode
        if not dummy_mode:
            try:
                el_tracker.doTrackerSetup()
            except RuntimeError as err:
                print('ERROR:', err)
                el_tracker.exitCalibration()
        clear_screen(win,genv)
    TextComponent elInstructions
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please press 'o' to begin EyeLink setup.
      units = norm
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EyeLinkStop
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    CodeComponent elStopRecord
      Code Type = Py
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      End Routine:
        # This End Routine tab of the elStopRecord component clears the
        # screen (and sends a message to mark the clearing), stops recording, sends
        # a trial end message, and increments a trial counter variable

        # clear the screen
        clear_screen(win,genv)
        el_tracker.sendMessage('blank_screen')
        # send a message to clear the Data Viewer screen as well
        el_tracker.sendMessage('!V CLEAR 128 128 128')

        # stop recording; add 100 msec to catch final events before stopping
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        # send a 'TRIAL_RESULT' message to mark the end of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIAL_RESULT %d' % 0)
  Routine fixation_routine
    RoutineSettingsComponent fixation_routine
      disabled = True
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    TextComponent fixation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $block_length
      text [set every frame] = +
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    CodeComponent StimulusDecider
      Code Type = Py
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      Before Experiment:
        from StimulusDecider import StimulusDecider
        import rtPupil_config

        # note that these parameters will partially determine the number of accepted
        # events. If you have too many random events in too short a block, enough
        # time will never pass to get an accepted pupil phase event.
        block_length = 30# in seconds
        # max_num_blocks = 1
        num_random_events = 2
        IEI_duration_sec = 3

        # rtPupilPhase algorithm parameters - Please see Table 1 in Kronemer et al.,
        # 2024 for more information. These reflect the defaults used in Kronemer et
        # al., 2024.
        baseline_duration_ms = 5000
        max_search_window_duration_ms = 5000
        pupil_sample_duration_ms = 100
        peak_pupil_quantile = 0.75
        trough_pupil_quantile = 0.25
        dilation_quantile = 0.99
        constriction_quantile = 0.01
      Begin Experiment:
        # log information about parameters
        param_log_message = "Input Parameters: block length: "+str(block_length)+\
        ", baseline_duration_ms: "+str(baseline_duration_ms)+", max_search_window_duration_ms: "+str(max_search_window_duration_ms)+\
        ", num_random_events: "+str(num_random_events)+", IEI_duration_sec: "+str(IEI_duration_sec)+", pupil_sample_duration_ms: "+\
        str(pupil_sample_duration_ms)+", peak_pupil_quantile: "+str(peak_pupil_quantile)+", trough_pupil_quantile: "+str(trough_pupil_quantile)+\
        ", dilation_quantile: "+str(dilation_quantile)+", constriction_quantile: "+str(constriction_quantile)
        logging.log(level=logging.EXP,msg=param_log_message)

        # save parameters in CSV as well
        thisExp.addData('baseline_duration', baseline_duration_ms)
        thisExp.addData('search_window_max_duration', max_search_window_duration_ms)
        thisExp.addData('IEI_duration', IEI_duration_sec)
        thisExp.addData('pupil_sample_duration_ms', pupil_sample_duration_ms)
        thisExp.addData('peak_pupil_quantile', peak_pupil_quantile)
        thisExp.addData('trough_pupil_quantile', trough_pupil_quantile)
        thisExp.addData('dilation_quantile', dilation_quantile)
        thisExp.addData('constriction_quantile', constriction_quantile)
      Begin Routine:
        # will keep track of accepted events
        decision_array = []
      Each Frame:
        sd.build_search_window() # build the search window
        event_idx = sd.detect_events_online() # determine whether there was an event
        # 1 = peak, -1 = trough, 2 = dilation, -2 = contriction, 3 = random, 0 = no event
        decision_array.append(event_idx) # add event code to decision array

        # NOTE: here is where you might want to write custom code to have closed-loop
        # functionality - if the event is not 0 or 3, do something.

        # do some logging of each frame in the output CSV file:
        #time of event, event index, search window (and times associated)
        thisExp.addData('current_time',globalClock.getTime())
        thisExp.addData('event',event_idx)
        # demean search window to match log file
        search_window = sd.get_search_window()
        demeaned_window = list(search_window - np.nanmean(search_window))
        thisExp.addData('demeaned_search_window', demeaned_window)
        thisExp.addData('search_window_times', sd.get_search_window_times())
        thisExp.nextEntry() # get next frame on new line
      End Routine:
        # append final decision array to end of CSV
        thisExp.addData('decision_array',decision_array)
  Routine end_experiment
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    TextComponent exp_end
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You have completed this experiment!

        Please wait for experimenter instructions.
    KeyboardComponent exp_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_instructions2
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine fixation_routine2
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    TextComponent text_norm_3
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $block_length
      text [set every frame] = +
      units = norm
      wrapWidth = 1.8
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        #text_norm_3.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    CodeComponent StimulusDecider_2
      Code Type = Py
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      Before Experiment:
        from StimulusDecider import StimulusDecider
        import rtPupil_config

        # note that these parameters will partially determine the number of accepted
        # events. If you have too many random events in too short a block, enough
        # time will never pass to get an accepted pupil phase event.
        block_length = 30# in seconds
        num_random_events = 2
        IEI_duration_sec = 3

        # rtPupilPhase algorithm parameters - Please see Table 1 in Kronemer et al.,
        # 2024 for more information. These reflect the defaults used in Kronemer et
        # al., 2024.
        baseline_duration_ms = 5000
        max_search_window_duration_ms = 5000
        pupil_sample_duration_ms = 100
        peak_pupil_quantile = 0.75
        trough_pupil_quantile = 0.25
        dilation_quantile = 0.99
        constriction_quantile = 0.01
      Begin Experiment:
        # log information about parameters
        param_log_message = "Input Parameters: block length: "+str(block_length)+\
        ", baseline_duration_ms: "+str(baseline_duration_ms)+", max_search_window_duration_ms: "+str(max_search_window_duration_ms)+\
        ", num_random_events: "+str(num_random_events)+", IEI_duration_sec: "+str(IEI_duration_sec)+", pupil_sample_duration_ms: "+\
        str(pupil_sample_duration_ms)+", peak_pupil_quantile: "+str(peak_pupil_quantile)+", trough_pupil_quantile: "+str(trough_pupil_quantile)+\
        ", dilation_quantile: "+str(dilation_quantile)+", constriction_quantile: "+str(constriction_quantile)
        logging.log(level=logging.EXP,msg=param_log_message)

        # save parameters in CSV as well
        thisExp.addData('baseline_duration', baseline_duration_ms)
        thisExp.addData('search_window_max_duration', max_search_window_duration_ms)
        thisExp.addData('IEI_duration', IEI_duration_sec)
        thisExp.addData('pupil_sample_duration_ms', pupil_sample_duration_ms)
        thisExp.addData('peak_pupil_quantile', peak_pupil_quantile)
        thisExp.addData('trough_pupil_quantile', trough_pupil_quantile)
        thisExp.addData('dilation_quantile', dilation_quantile)
        thisExp.addData('constriction_quantile', constriction_quantile)
      Begin Routine:
        # will keep track of accepted events
        decision_array = []
      Each Frame:
        sd.build_search_window() # build the search window
        event_idx = sd.detect_events_online() # determine whether there was an event
        # 1 = peak, -1 = trough, 2 = dilation, -2 = contriction, 3 = random, 0 = no event
        decision_array.append(event_idx) # add event code to decision array

        # NOTE: here is where you might want to write custom code to have closed-loop
        # functionality - if the event is not 0 or 3, do something.

        # do some logging of each frame in the output CSV file:
        #time of event, event index, search window (and times associated)
        thisExp.addData('current_time',globalClock.getTime())
        thisExp.addData('event',event_idx)
        # demean search window to match log file
        search_window = sd.get_search_window()
        demeaned_window = list(search_window - np.nanmean(search_window))
        thisExp.addData('demeaned_search_window', demeaned_window)
        thisExp.addData('search_window_times', sd.get_search_window_times())
        thisExp.nextEntry() # get next frame on new line
      End Routine:
        # append final decision array to end of CSV
        thisExp.addData('decision_array',decision_array)
Flow
  Routine EyeLinkSetup
  Routine task_instructions
  Routine EyeLinkStart
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = BlockData.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block_idx', 1)]),
      OrderedDict([('block_idx', 2)])]
    Routine start_block
    Routine fixation_routine2
    Routine end_block
  LoopTerminator trials
  Routine EyeLinkStop
  Routine end_experiment
